name: Transfer_Out_Of_BK
metadata:
  author: Tobias Ginsburg, Kyle Hippe, Ryan D. Lewis
  info: Example workflow for WEI
  version: 0.2


flowdef:
  - name: Home UR
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.travel_safe_joints
      acceleration: 0.35
      velocity: 0.35
  - name: Move Rail to Zero
    module: vention_rail_RAPID200
    action: move
    args:
      position: 0
      speed: 20
      acceleration: 10
  - name: Home Rail
    module: vention_rail_RAPID200
    action: home
  - name: Back out Rail
    module: vention_rail_RAPID200
    action: move
    args:
      position: 50
      speed: 10
      acceleration: 10
  - name: Close Gripper
    module: ur_RAPID200
    action: toggle_gripper
    args:
      close: true
  - name: Move to door closed home position
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.door_closed_safe_joints
      velocity: 0.35
      acceleration: 0.35
  - name: Move to door opening position
    module: ur_RAPID200
    action: movel
    args:
      location: ur_RAPID200.door_closed_outside
      acceleration: 0.35
      velocity: 0.35
  - name: Open Door
    module: ur_RAPID200
    action: movel
    args:
      location: ur_RAPID200.door_open_inside
      velocity: 0.05
      acceleration: 0.05
  - name: Home UR
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.travel_safe_joints
      acceleration: 0.35
      velocity: 0.35
  - name: Move Rail to Safe Approach Position
    module: vention_rail_RAPID200
    action: move
    args:
      position: 50
      speed: 30
      acceleration: 10
  - name: Move Arm to Safe Approach Position
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.big_kahuna_safe_joints
      acceleration: 0.35
      velocity: 0.35
  - name: Move Rail to Pick Position
    module: vention_rail_RAPID200
    action: move
    args:
      position: 0
      speed: 30
      acceleration: 10
  - name: Set UR Params
    module: ur_RAPID200
    action: set_movement_params
    args:
      velocity: 0.35
      acceleration: 0.35
      gripper_speed: 50
      gripper_force: 150
  - name : Gripper Pick
    module : ur_RAPID200
    action : gripper_pick
    args : 
      home : ur_RAPID200.big_kahuna_safe_joints
      source : ur_RAPID200.big_kahuna_supply_rack_icp
      source_approach_axis : null
      source_approach_distance : .15
      gripper_close : null
  - name: Move Rail to Safe Approach Position
    module: vention_rail_RAPID200
    action: move
    args:
      position: 50
      speed: 30
      acceleration: 10
  - name: Move Arm to Safe Approach Position
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.big_kahuna_safe_joints
      acceleration: 0.35
      velocity: 0.35
  - name: Home UR
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.travel_safe_joints
      acceleration: 0.35
      velocity: 0.35
  - name: Move Rail to Place Position
    module: vention_rail_RAPID200
    action: move
    args:
      position: payload.rail_position
      speed: 30
      acceleration: 10
  - name: Set UR Params
    module: ur_RAPID200
    action: set_movement_params
    args:
      velocity: 0.35
      acceleration: 0.35
      gripper_speed: 50
      gripper_force: 150
  - name : Test Gripper Place
    module : ur_RAPID200
    action : gripper_place
    args : 
      home : payload.arm_safe_joints
      target : payload.arm_position
      target_approach_axis : null
      target_approach_distance : .15
      gripper_open : null
  - name: Home UR
    module: ur_RAPID200
    action: movej
    args:
      joints: ur_RAPID200.travel_safe_joints
      acceleration: 0.35
      velocity: 0.35